PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s_%s_%s' % (expInfo['Participant'], expInfo['Age'], expInfo['Gender'], expInfo['Group'], expName, expInfo['date'])
  Experiment info = {'Participant': 'f"{randint(0, 999999):06.0f}"', 'Age': '', 'Gender': '', 'Group': 'A', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = Yagmur_Final_308
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
    ImageComponent fixationITI_continue
      durationEstim = 2.2
      image [set every repeat] = $imagePath
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.2
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
    TextComponent target
      color [set every repeat] = $color
      letterHeight = 1
      pos [set every repeat] = (targetX, 0)
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
      units = deg
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    PolygonComponent cue
      durationEstim = 0.2
      fillColor = white
      ori [set every repeat] = cueOri
      pos = (0, -2)
      shape = triangle
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 12
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine ITI
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    ImageComponent fixationITI
      durationEstim = 1.5
      image [set every repeat] = $imagePath
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine feedback
    ImageComponent fixationITI_continue_feedback
      durationEstim = 1.0
      image [set every repeat] = $imagePath
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #Check responses
        if resp.corr:
            #Display response time, correct answers out of all trials and correct responses out of last 5 trials
            msgColor = "green"
            msg = "Correct!"
        else:
            msgColor = "red"
            msg = "Incorrect."
    TextComponent text_feedback
      color [set every repeat] = $msgColor
      letterHeight = 1
      pos = (0, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine intro_text
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    TextComponent text
      letterHeight = 0.7
      startVal [time (s)] = 0.0
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      text:
        Welcome

        In this experiment you will be presented with a worded, colored Posner task. The fixation image in the center will change in each block. Keep your eyes fixated to the fixation image.

        Words will appear at left or right sides of the screen. Press the arrow keys LEFT or RIGHT to indicate where the word appears.

        Press SPACE to continue
    KeyboardComponent continue_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exit
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    TextComponent text_thanks
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The experiment has ended. Thank you for your participation.

        This window will close automatically in 5 seconds.
Flow
  Routine intro_text
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"Group" + expInfo["Group"] + ".xlsx"
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditionsPosner.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'word': 'hate', 'color': 'red', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'hate', 'color': 'blue', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'hate', 'color': 'black', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'death', 'color': 'red', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'death', 'color': 'blue', 'cueSide': 'left', 'cueOri': -90, 'targetX': -7, 'corrAns': 'left', 'valid': 1},
        {'word': 'death', 'color': 'black', 'cueSide': 'left', 'cueOri': -90, 'targetX': -7, 'corrAns': 'left', 'valid': 1},
        {'word': 'gate', 'color': 'red', 'cueSide': 'left', 'cueOri': -90, 'targetX': -7, 'corrAns': 'left', 'valid': 1},
        {'word': 'gate', 'color': 'blue', 'cueSide': 'left', 'cueOri': -90, 'targetX': -7, 'corrAns': 'left', 'valid': 1},
        {'word': 'gate', 'color': 'black', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'health', 'color': 'red', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'health', 'color': 'blue', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'health', 'color': 'black', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1},
        {'word': 'hate', 'color': 'red', 'cueSide': 'right', 'cueOri': 90, 'targetX': 7, 'corrAns': 'right', 'valid': 1}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
      Routine ITI
      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine exit
