PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['Participant ID'], expInfo['Age'], expInfo['Gender'], expName, expInfo['date'])
  Experiment info = {'Participant ID': 'f"{randint(0, 999999):06.0f}"', 'Age': '', 'Gender': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = glasgowFaceRecognition-Yagmur
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent same_text
      letterHeight = 0.1
      pos = [-0.35, -0.8]
      startVal [time (s)] = 0.0
      text = SAME
      units = norm
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    TextComponent different_text
      letterHeight = 0.1
      pos = (0.42, -0.8)
      startVal [time (s)] = 0.0
      text = DIFFERENT
      units = norm
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    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyResp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left
      fillColor = white
      ori = 270
      pos = (-0.2, -0.8)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent arrow_right
      fillColor = white
      ori = 90
      pos = (0.2, -0.8)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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  Routine instructions
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task, you will decide whether two images belong to the same person or different people.



        Press the LEFT arrow key if the faces are the SAME.

        Press the RIGHT arrow key if the faces are DIFFERENT.



        Press the SPACE bar to continue.
    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks_message
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    TextComponent thank_you_message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The experiment has ended. Thank you for your participation!

        This window will close in 5 seconds
  Routine feedback
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    CodeComponent setMsg
      Code Type = Py
      Begin Routine:
        # Check for keyboard input
        keys = event.getKeys()
        if 'left' in keys:
            response = 'left'  # User pressed the left arrow key
        elif 'right' in keys:
            response = 'right'  # User pressed the right arrow key

        # Compare the user's response with the correct answer from the conditions file
        if response == corrAns:
            msgColor = "green"
            msg = "Correct response!"
            print(msg)  # Message for correct response

        else:
            msgColor = "red"
            msg = " Wrong response."
            print(msg)  # Message for incorrect response
    TextComponent textCorr
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $msg
      units = norm
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    TextComponent same_text_cont
      letterHeight = 0.1
      pos = [-0.35, -0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = SAME
      units = norm
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    TextComponent different_text_cont
      letterHeight = 0.1
      pos = (0.42, -0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      text = DIFFERENT
      units = norm
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    ImageComponent image_cont
      image [set every repeat] = $imageFile
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = norm
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    PolygonComponent arrow_left_cont
      fillColor = white
      ori = 270
      pos = (-0.2, -0.8)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = norm
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    PolygonComponent arrow_right_cont
      fillColor = white
      ori = 90
      pos = (0.2, -0.8)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = norm
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Flow
  Routine instructions
  LoopInitiator trials_faceRecognition loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageFile': 'same/020_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/025_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/068_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/069_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/074_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/075_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/081_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/085_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/092_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/102_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/108_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/115_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/120_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/129_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/136_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/139_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0},
      {'imageFile': 'same/168_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same', 'ori': 0}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
    Routine trial
    Routine feedback
  LoopTerminator trials_faceRecognition
  Routine thanks_message
